PsychoPy2experiment version="2020.2.10"
Settings
  Completed URL = $'https://uwo.eu.qualtrics.com/jfe/form/SV_0PM9n45JrGKmfeS/?participant='+expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1504, 1003]
  expName = AL
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Routines
  Routine trial
    SoundComponent TargetSound
      sound [set every repeat] = $File
      startVal [time (s)] = 0.0
      volume [set every repeat] = 0.3
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    KeyboardComponent TDresp
      allowedKeys [set every repeat] = 'space',
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TargetSound.getDuration()
      store = all keys
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    TextComponent PlayTxt
      disabled = True
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TargetSound.getDuration()
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      text:
        Press SPACE as quickly as possible when you hear the target syllable
    TextComponent Cross
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TargetSound.getDuration()
      text [set every repeat] = $Target
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        #TDRT = 0
        #soundOnset = 0
        #TDresponseOnset = 0
        #TDreactiontime = 0
        #TDcount = 0
      Begin Routine:
        #TDtimer = core.Clock()

        #if Sound == Target:
        #    TDtimer.reset()
        #if TDresp.keys != None:
        #    TDRT = TDtimer.getTime()
        #else:
        #    TDRT = None

        #if Sound == Target:
        #    soundOnset = TDtimer.getTime()
        #if TDresp.keys in ['', [], None]:
        #    TDresp.keys = None
        #if TDresp.keys != None:
        #    TDresponseOnset = TDtimer.getTime()
        #    TDreactiontime = TDresponseOnset - soundOnset
        #    if TDreactiontime < 2:
        #        TDRT += TDreactiontime
        #        TDcount += 1
        #
        #if TDcount > 0:
        #    TDmeanRT = TDRT/TDcount
        #    PlayTD.addData('TDmean.rt', TDmeanRT)
      End Routine:
        #PlayTD.addData('TDRT', TDRT)
        #PlayTD.addData('SoundOnset', soundOnset)
        #
        #PlayTD.addData('TDcount', TDcount)
        #PlayTD.addData('TDResponseTime', TDreactiontime)
        #PlayTD.addData('TDresponseOnset', TDresponseOnset)
        PlayTD.addData('T_Location', Location)
        if loopcounter == 1:
            PlayTD.finished=True
            continueRoutine=False
  Routine PlaySample
    KeyboardComponent EndPlay
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = $SyllableSound.getDuration() + 1
      store = nothing
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    SoundComponent SyllableSound
      sound [set every repeat] = $TargetFile
      startVal [time (s)] = 0.0
      volume [set every repeat] = 1
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    SoundComponent Repeat
      sound [set every repeat] = $TargetFile
      startVal [time (s)] = $SyllableSound.getDuration() + 1
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    TextComponent SoundTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Target
    TextComponent ContinueKey2
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = $SyllableSound.getDuration() + 1
      text = Press SPACE to begin
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    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The target syllable is:




        (Press SPACE when you hear this syllable in the recording)
    TextComponent TrialNoTxt2
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $TrialNo
  Routine SampleSound
    MouseComponent Click
      clickable = Clickhere
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent SampleTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        The target sound is:




        Click anywhere on the screen to hear the sound
    KeyboardComponent ContinueKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Clickhere
      bold = False
      editable = False
      letterHeight = 0.05
      padding = None
      size = (0.13, 0.07)
      startVal [time (s)] = 0.0
      text = GA
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  Routine Randomize
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        count = 0
      Begin Routine:
        Sound = WordFILES
        while count < 16:

            count += 1
  Routine AFCStart
    TextComponent QuestionNoTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $QuestionNo
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  Routine count1
    TextComponent Count1Txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 1
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  Routine count2
    TextComponent Count2Txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 2
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  Routine count
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        AFCcount = 0
      Begin Routine:
        AFCcount += 1
        QuestionNo = "Trial" + str(AFCcount) + " /16"
  Routine TDStart
    TextComponent Countdown1
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent RandCond
      Code Type = Both
      Begin JS Routine:
        opt1 = "0:48";
        opt2 = "48:96";
        opt3 = "96:144";
        opt4 = "144:192";
        opt5 = "192:240";
        opt6 = "240:288";
        opt7 = "288:336";
        opt8 = "336:384";
        opt9 = "384:432";
        opt10 = "432:480";
        opt11 = "480:528";
        opt12 = "528:576";

        if ((((Target === "ru") || (Target === "pu")) || (Target === "ni"))) {
            condlist = [opt1, opt2, opt3, opt4, opt5, opt6, opt7, opt8, opt9];
            rows = condlist[(Math.random() * condlist.length) | 0];
        } else {
            if ((((Target === "re") || (Target === "ge")) || (Target === "me"))) {
                condlist = [opt1, opt2, opt3, opt4, opt5, opt6, opt10, opt11, opt12];
                rows = condlist[(Math.random() * condlist.length) | 0];
            } else {
                if ((((Target === "fe") || (Target === "ti")) || (Target === "su"))) {
                    condlist = [opt1, opt2, opt3, opt10, opt11, opt12, opt7, opt8, opt9];
                    rows = condlist[(Math.random() * condlist.length) | 0];
                } else {
                    condlist = [opt10, opt11, opt12, opt4, opt5, opt6, opt7, opt8, opt9];
                    rows = condlist[(Math.random() * condlist.length) | 0];
                }
            }
        }
      Begin Routine:
        ## Randomize between 6 randomizations
        opt1 = "0:48" #FO #ta
        opt2 = "48:96" #FO #ta
        opt3 = "96:144" #FO #ta
        opt4 = "144:192" #KI #ta
        opt5 = "192:240" #KI #fe
        opt6 = "240:288" #KI
        opt7 = "288:336" #SI #re
        opt8 = "336:384" #SI
        opt9 = "384:432" #SI
        opt10 = "432:480" #TAY #ru
        opt11 = "480:528" #TAY
        opt12 = "528:576" #TAY

        if Target == "ru" or Target == "pu" or Target == "ni":
            rows = random.choice([opt1, opt2, opt3, opt4, opt5, opt6, opt7, opt8, opt9])
        elif Target == "re" or Target == "ge" or Target == "me":
            rows = random.choice([opt1, opt2, opt3, opt4, opt5, opt6, opt10, opt11, opt12])
        elif Target == "fe" or Target == "ti" or Target == "su":
            rows = random.choice([opt1, opt2, opt3, opt10, opt11, opt12, opt7, opt8, opt9])
        else:
            rows = random.choice([opt10, opt11, opt12, opt4, opt5, opt6, opt7, opt8, opt9])
  Routine SampleIntro
    TextComponent TargetMssg
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The target syllable is:




        (Press SPACE when you hear this syllable in the recording)
    KeyboardComponent PlayTargetKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TargetTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Target
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    CodeComponent Count
      Code Type = Auto->JS
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      Begin Experiment:
        repeatCount = 0
      Begin Routine:
        repeatCount += 1
        TrialNo = "Recording " + str(repeatCount) + " of 36"
    TextComponent TrialNoTxt
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $TrialNo
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    TextComponent ContinueTxt4
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to hear the syllable
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  Routine Part1Intro
    TextComponent WelcomeTxt2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the next part, you will complete different tasks using your experience with the alien speech.

        First, the researchers would like you to mark the timing of when each syllable appears in the speech.

        We will play you 36 short snippets of the speech. At the beginning of each recording, you will be given a 'Target Syllable'. Every time the target syllable appears in the recording, press SPACE as quickly and accurately as you can to record the precise syllable onset time.
    TextComponent BeginTxt
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent ContinueKey3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent RepCount
      Code Type = Auto->JS
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      Begin Experiment:
        repeatCount = 0
        count = 0
  Routine Part2Intro2
    TextComponent P2IntroTxt2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the next part, you will hear two speech sounds. Your task is to indicate whether the first or the second one sounds like a word from the language you just listened to.

        There will be 16 trials in total.
    TextComponent ContinueKey6
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to begin 
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    KeyboardComponent ContinueKey7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SoundCheckIntro
    TextComponent SoundCheckTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        We will begin with a quick volume calibration and headphone check.

        First, we will play some music to make sure that your sound volume is at a comfortable level.



        Press SPACE to begin the volume calibration
    KeyboardComponent SoundCheckBegin
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SoundCheck
    SoundComponent VolumeAdjust
      sound = volumeadjust.wav
      startVal [time (s)] = 0.0
      volume = 0.4
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    TextComponent SoundCheckEndTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Please adjust your volume to a comfortable level.



        Press SPACE when you are ready to continue
    KeyboardComponent SoundCheckEndKey
      allowedKeys = 'space', 
      forceEndRoutine = True
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  Routine BeginTD
    TextComponent BeginP1Txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = We will now begin the task
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  Routine Welcome0
    TextComponent Welcome0Mssg
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!



        This experiment involves audio stimuli and requires you to wear headphones. Before we begin, please make sure that you're in a quiet listening environment, that you are wearing headphones, and that your volume is turned on.



        Press SPACE to begin
    KeyboardComponent Welcome0Continue
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine P1End
    TextComponent ThankyouMssg
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This is the end of Part I.
        Thank you for your response!

        You may take a short break now if you wish.
    TextComponent ExitKey
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE when you are ready to begin Part II
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    KeyboardComponent EndKey
      allowedKeys = 'space', 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine P2BeginTraining
    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Let's first do some practice with a few words that we have created.

        During practice, you will be given feedback about whether your response was correct or not.
    TextComponent P2BeginTrainingEnd
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to begin
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    KeyboardComponent ContinueKey10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrainPause
    TextComponent TrainCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
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  Routine P2End
    TextComponent EndMssg
      disabled = True
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        You have now completed all the tasks.
        Thank you for helping the researchers! We appreciate your time and cooporation.

        Your Completion Code is:
    KeyboardComponent EndAllKey
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent CompletionCode
      bold = False
      borderColor = Black
      color = Black
      disabled = True
      editable = False
      fillColor = White
      letterHeight = 0.04
      padding = None
      pos = (0, 0.05)
      size = (0.25, 0.07)
      startVal [time (s)] = 0.0
      text = 1B9FF7D8
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    TextComponent ExitTxt
      disabled = True
      letterHeight = 0.04
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = Please write the code down so you can enter it when you return to Prolific. You may then exit the study by pressing the ENTER key.
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    TextboxComponent FeedbackResp
      bold = False
      color = black
      editable = True
      fillColor = white
      font = Times New Roman
      letterHeight = 0.03
      padding = None
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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    TextComponent FeedbackQ
      font = Times New Roman
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Please use this section to leave any comment or feedback on the study. (Was there any technical difficulty? Any instruction that was unclear? etc.)
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    TextComponent EndMssg_Ver2
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing the tasks! We appreciate your time and cooporation.

        You may now exit the study by pressing ENTER. You will then see a green dialog box that indicates that your data has been successfully saved. Once you click "OK", you will be directed back to Prolific with your completion code.
        PLEASE DO NOT CLOSE THIS WINDOW.
  Routine AttentionCheck1
    KeyboardComponent AttentionKey1
      allowedKeys = '1', '2', 'return'
      correctAns = 2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent AttentionCheck1Txt
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        What is your favorite colour?

        (Please type your answer in the box below)
    TextboxComponent AttnCheck1Resp
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      padding = None
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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    TextComponent AttnCheck1Cont
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press ENTER to submit
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    CodeComponent OccurenceCounter2
      Code Type = Auto->JS
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      End Routine:
        OccurenceC += 1
  Routine AttentionCheck2
    KeyboardComponent AttentionKey2
      allowedKeys = '1', '2', 'return'
      correctAns = 3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent AttentionCheck2Txt
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        What is your favorite food?

        (Please type your answer in the box below)
    TextboxComponent AttnCheck2Resp
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      padding = None
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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    TextComponent AttnCheck2Cont
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press ENTER to submit
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  Routine HeadphoneCheck
    TextComponent HeadphoneCheckTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Next, we will do a short headphone check. Your submission may be rejected if you fail the headphone check.

        On each trial, you will hear three tones. One of these tones will be quieter than the others. You will identify whether the quiet tone occurred first, second, or third.

        There are six trials in total.
    TextComponent HeadphoneContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to begin the headphone check
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    KeyboardComponent HeadphoneContinueKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine HeadphonePlay
    SoundComponent CheckSound
      sound [set every repeat] = $File
      startVal [time (s)] = 0.5
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    TextComponent CheckTxt
      letterHeight = 0.04
      startVal [time (s)] = $CheckSound.getDuration() + 0.5
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      text:
        Which tone was the quietest?
        (Press the corresponding number on your keyboard)

        1 = First  2 = Second  3 = Third
    KeyboardComponent CheckResp
      allowedKeys = '1', '2', '3' 
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = $CheckSound.getDuration() + 0.5
      storeCorrect = True
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    TextComponent TrialNumber
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CheckSound.getDuration() + 0.5
      text [set every repeat] = $checkcount
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        counter = 1
        checkcount = str(counter) + "/6"
        headphonecorrect = 0
      Begin Routine:
        counter += 1
        checkcount = str(counter) + "/6"
      End Routine:
        if CheckResp.corr == 1:
            message = "CORRECT"
            headphonecorrect += 1
        else:
            message = "INCORRECT"
    TextComponent Cross2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CheckSound.getDuration() + 0.5
      text = +
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  Routine loopcounter
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        loopcounter = 1
  Routine HeadphoneFeedback
    TextComponent FeedbackMssg
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message
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  Routine P1IntroII
    TextComponent P1Intro2Txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Great job!
        Let's now work with the actual speech. Remember to try your best to press SPACE at the same time as the target syllable onset.
        There will be no feedback given this time.


        There are 36 recordings in total. You may take a short break at the beginning of each recording if you wish.
    TextComponent text_4
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to begin
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent TD_randomize
      Code Type = Both
      Begin Experiment:
        partone = "0"
        parttwo = "0"
        partthree = "0"
      Begin JS Experiment:
        partone = "0";
        parttwo = "0";
        partthree = "0";
      Begin JS Routine:
        // Equivalent js function to random shuffle
        function shuffle(array) {
          var currentIndex = array.length, temporaryValue, randomIndex;

          // While there remain elements to shuffle...
          while (0 !== currentIndex) {

            // Pick a remaining element...
            randomIndex = Math.floor(Math.random() * currentIndex);
            currentIndex -= 1;

            // And swap it with the current element.
            temporaryValue = array[currentIndex];
            array[currentIndex] = array[randomIndex];
            array[randomIndex] = temporaryValue;
          }

          return array;
        }

        if ((cond === "1")) {
            partone = "0:12";
            parttwo = "12:24";
            partthree = "24:36";
        } else {
            if ((cond === "X")) {
                partone = "36:48";
                parttwo = "48:60";
                partthree = "60:72";
            } else {
                if ((cond === "2")) {
                    partone = "72:84";
                    parttwo = "84:96";
                    partthree = "96:108";
                } else {
                    if ((cond === "4")) {
                        partone = "108:120";
                        parttwo = "120:132";
                        partthree = "132:144";
                    } else {
                        if ((cond === "3")) {
                            partone = "144:156";
                            parttwo = "156:168";
                            partthree = "168:180";
                        } else {
                            if ((cond === "6")) {
                                partone = "180:192";
                                parttwo = "192:204";
                                partthree = "204:216";
                            }
                        }
                    }
                }
            }
        }
        partlist = [partone, parttwo, partthree];
        // Random shuffle partlist using function 'shuffle'
        shuffle(partlist);
        console.log(partlist);

        first = partlist[0];
        second = partlist[1];
        third = partlist[2];
      Begin Routine:
        if cond == "1":
            partone = "0:12"
            parttwo = "12:24"
            partthree = "24:36"
        elif cond == "X":
            partone = "36:48"
            parttwo = "48:60"
            partthree = "60:72"
        elif cond == "2":
            partone = "72:84"
            parttwo = "84:96"
            partthree = "96:108"
        elif cond == "4":
            partone = "108:120"
            parttwo = "120:132"
            partthree = "132:144"
        elif cond == "3":
            partone = "144:156"
            parttwo = "156:168"
            partthree = "168:180"
        elif cond == "6":
            partone = "180:192"
            parttwo = "192:204"
            partthree = "204:216"

        import random
        partlist = [partone, parttwo, partthree]
        random.shuffle(partlist)
        first = partlist[0]
        second = partlist[1]
        third = partlist[2]
  Routine TrainVolumeSet
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        setvolume = 1
  Routine TDTrainFeedback
    TextComponent TDTrainFeedbackMssg
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $'You correctly responded to ' + str(respcount) + ' of the 5 target syllables. Your average response time was '+ str(round(meanRT, 2)) + 's.'  
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    KeyboardComponent EndFeedback
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Auto->JS
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      End Routine:
        respcount = 0
        reactiontime = 0
        TrainRT = 0
    TextComponent TrainingContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine train
    CodeComponent code_9
      Code Type = Both
      Begin Experiment:
        respOnset = 0
        TargetOnset = 0 # Target sound onset
        previousOnset = 0
        respcount = 0 # Number of "hits"
        TrainRT = 0 # Sum of all RTs

        mytimer = core.Clock()
      Begin JS Experiment:
        respOnset = 0;
        TargetOnset = 0;
        previousOnset = 0;
        respcount = 0;
        TrainRT = 0;

        mytimer = new util.Clock();
      Begin JS Routine:
        if ((Sound === Target)) {
            TargetOnset = mytimer.getTime();
        }
        soundOnset = mytimer.getTime();
      Begin Routine:
        if Sound == Target:
            TargetOnset = mytimer.getTime()
        soundOnset = mytimer.getTime()
      End JS Routine:
        TrainTD.addData("TargetOnset", TargetOnset);

        if (typeof TrainResp.keys !== 'undefined') {  // we had a response
            respOnset = (TrainResp.rt[0] + soundOnset);
            TrainTD.addData("RespOnset", respOnset);
            if (((respOnset - previousOnset) > 1.2)) {
                reactiontime = (respOnset - TargetOnset);
                TrainTD.addData("ReactionTime", reactiontime);
                if ((reactiontime < 1.2)) {
                    respcount += 1;
                    TrainRT += reactiontime;
                    previousOnset = respOnset;
                }
            }
        }
        if ((respcount > 0)) {
            meanRT = (TrainRT / respcount);
            TrainTD.addData("mean.rt", meanRT);
        } else {
            meanRT = 0;
        }
        if ((respcount > 5)) {
            respcount = 5;
        }
        TrainTD.addData("RespOnset", respOnset);
        TrainTD.addData("Respcount", respcount);
      End Routine:
        # Set Target Onset time
        #if Sound == Target:
        #    TargetOnset = TDTrainSound.tStartRefresh
        TrainTD.addData('TargetOnset', TargetOnset)
        # Check if keyboard has been pressed
        if TrainResp.keys in ['', [], None]:
            TrainResp.keys = None
        if TrainResp.keys != None: # we had a response
            #respOnset = TrainResp.rt[0] + TDTrainSound.tStartRefresh
            respOnset = TrainResp.rt[0] + soundOnset
            TrainTD.addData('RespOnset', respOnset)
            # Check if the response is too close to the previous valid response
            if respOnset - previousOnset > 1.2:
                # Calculate RT
                reactiontime = respOnset - TargetOnset
                TrainTD.addData('ReactionTime', reactiontime)
                # Check if RT is below the cutoff
                if reactiontime < 1.2:
                    # Count it as a valid "hit"
                    respcount += 1
                    # Count the RT toward total RTs
                    TrainRT += reactiontime
                    # Use this as the latest valid response
                    previousOnset = respOnset
        # Calculate the mean RT
        if respcount > 0:
            meanRT = TrainRT/respcount
            TrainTD.addData('mean.rt', meanRT)
        else: # If no response was made
            meanRT = 0
        # If too many responses were made
        if respcount > 5:
            respcount = 5

        TrainTD.addData('RespOnset', respOnset)
        TrainTD.addData('Respcount', respcount)
    SoundComponent TDTrainSound
      sound [set every repeat] = $File
      startVal [time (s)] = 0.0
      volume = 0.3
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    KeyboardComponent TrainResp
      allowedKeys = 'space',
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TDTrainSound.getDuration()+0.03
      store = all keys
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    TextComponent TDTrainTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TDTrainSound.getDuration()+0.05
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      text:
        Press SPACE as quickly as possible when you hear the target syllable
    TextComponent Cross3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TDTrainSound.getDuration()+0.05
      text [set every repeat] = $Target
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  Routine TrainingSample
    TextComponent SampleMssg2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The target syllable is:




        (Press SPACE when you hear this syllable in the recording)
    TextComponent TrainigTarget
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Target
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        trainingcount = 0
      Begin Routine:
        trainingcount += 1
    TextComponent TrainingNumber
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Training ' + str(trainingcount) 
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    TextComponent TrainingSampleContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to listen to this syllable
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    KeyboardComponent TSContinueKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrainingPlaySample
    SoundComponent TrainingSampleSound
      sound [set every repeat] = $TargetFile
      startVal [time (s)] = 0.0
      volume = 0.3
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    SoundComponent TraingRepeatSound
      sound [set every repeat] = $TargetFile
      startVal [time (s)] = $TrainingSampleSound.getDuration() + 1
      volume = 0.3
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    TextComponent TrainTargetTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Target
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    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The target syllable is:




        (Press SPACE when you hear this syllable in the recording)
    TextComponent TrainingBeginSample
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = $TrainingSampleSound.getDuration() +1
      text = Press SPACE to begin listening
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    TextComponent TrainingNumber2
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Training ' + str(trainingcount) 
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    KeyboardComponent TrainEndSample
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_2
    SoundComponent sound_1
      sound [set every repeat] = $File
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        temp_clock = core.Clock()
      Begin Routine:
        Onset = temp_clock.getTime()
        if key_resp_2 != None:
            response = temp_clock.getTime()
      End Routine:
        trials_2.addData('Onset', Onset)
        trials_2.addData('Response', response)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sound_1.getDuration()
      store = first key
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  Routine coding_part
    CodeComponent code_13
      Code Type = Auto->JS
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  Routine MSTplay
    TextComponent MSTTestOptions
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        (Press the corresponding number on your keyboard)

        1 = OLD (The exact same word has been played before)

        2 = NEW (This word is being played for the first time)
    SoundComponent MSTTestPlay
      sound [set every repeat] = $File
      startVal [time (s)] = 0.0
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    KeyboardComponent MST_resp
      allowedKeys = '1', '2', 
      correctAns = $WordCorrect
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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    TextComponent MSTTestTrialNum
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $number
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    TextComponent MSTTestNote
      letterHeight = 0.035
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text:
        *Words that are similar to but different from previously played words should also be labeled as NEW
  Routine MSTTrialCount
    TextComponent Cross1500ms
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    CodeComponent MSTTrialCounter
      Code Type = Auto->JS
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      Begin Experiment:
        MSTcount = 0
      Begin Routine:
        MSTcount += 1
        number = str(MSTcount) + "/100"
  Routine MSTTrainFeedbackII
    TextComponent MSTTrainFeedbackMssg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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  Routine MSTTrainFeedback
    CodeComponent MSTTrainFeedbackType
      Code Type = Auto->JS
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      Begin Routine:
        if Type == 'NEW':
            message = "This is a NEW word. \nThis is your first time hearing this word."
        elif Type == 'SIMILAR':
            message = "This is a NEW word. \nNote that this one sounds similar to the previous word but is not exactly the same."
        elif Type == 'OLD':
            message = "This is an OLD word. \nThis word is exactly the same as the first word."
      End Routine:
        if MSTTrainKeys.corr == 1:
            feedback = 'CORRECT'
        else:
            feedback = 'INCORRECT'
    TextComponent MSTTrainOptions
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1 = OLD      2 = NEW
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    TextComponent MSTTrainMssg
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $message
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    TextComponent MSTTrainContinueMssg
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the correct number on your keyboard
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    KeyboardComponent MSTTrainKeys
      allowedKeys = '1', '2',
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent MSTTrainCross2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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  Routine MSTTrain
    CodeComponent MSTTrainTrialCount
      Code Type = Auto->JS
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      End Routine:
        #if ResponsePractice.corr == 1:
        #    feedback = "CORRECT"
        #    txtcolor = "lightgreen"
        #else:
        #    feedback = "INCORRECT"
        #    txtcolor = "red"
        #
        #message = "This is a " + Type + " word."
        Tcount += 1
        MSTTrialCount = 'Trial ' + str(Tcount)
    SoundComponent MSTTrainSound
      sound [set every repeat] = $SoundFile
      startVal [time (s)] = 0.0
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    TextComponent MSTTrainCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $MSTTrainSound.getDuration()
      text = +
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    TextComponent MSTTrainTrialNum
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $MSTTrainSound.getDuration()
      text [set every repeat] = $MSTTrialCount
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  Routine MSTTestStartInstrct
    TextComponent MSTTestBeginTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Great job! This is the end of the practice.


        We will now begin the actual task. There are 100 sound files in total. The words from the practice are not part of the actual task.
    KeyboardComponent MSTTestBeginKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent MSTTestBegin
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    CodeComponent MSTOrderRandomize
      Code Type = Both
      End JS Routine:
        condition = "0:100";
        c = Math.floor(Math.random() * 6);
        if ((c === 0)) {
            condition = "0:100";
        } else {
            if ((c === 1)) {
                condition = "100:200";
            } else {
                if ((c === 2)) {
                    condition = "200:300";
                } else {
                    if ((c === 3)) {
                        condition = "300:400";
                    } else {
                        if ((c === 4)) {
                            condition = "400:500";
                        } else {
                            if ((c === 5)) {
                                condition = "500:600";
                            }
                        }
                    }
                }
            }
        }
      End Routine:
        condition = "0:100"
        import random
        c = random.randint(0, 6)
        if c == 0:
            condition = "0:100"
        elif c == 1:
            condition = "100:200"
        elif c == 2:
            condition = "200:300"
        elif c == 3:
            condition = "300:400"
        elif c == 4:
            condition = "400:500"
        elif c == 5:
            condition = "500:600"
  Routine MSTTrainIntro
    TextComponent MSTTrainIntroTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = We will first begin with a few practice trials to familiarize you with the task. During the practice, we will give you the correct answer.
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    TextComponent MSTTrainIntroCont
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent MSTTrainIntroKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent MSTTrainCounter
      Code Type = Auto->JS
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      Begin Experiment:
        Tcount = 1
        MSTTrialCount = 'Trial ' + str(Tcount)
      Begin Routine:
        Randomization.addData('Condition', 1)
  Routine MSTWelcome
    TextComponent MSTWelcomeTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Task A (20 minutes)

        Researchers in XXX University are studying alien words and have created a sound file for each word they have collected. However, some of the sound files have been accidentally duplicated and now they need your help looking for the duplicated words.

        There are 100 sound files in total but almost half of them are duplicates. Your task is to listen to each word and label them as either "OLD" (duplicate) or "NEW".
    TextComponent WelcomeP2Continue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent ContinueKey8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent BreakLoop
      Code Type = Auto->JS
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      End Routine:
        Randomization.finished = True
  Routine AFCQuestion
    TextComponent QuestionTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Which word sounded correct?
        (Press the corresponding number on your keyboard)
    KeyboardComponent AFCResp
      allowedKeys = '1', '2', 
      correctAns = $AFCCorrect
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine AFCSecond
    TextComponent Word2No
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.07
      text = 2
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    SoundComponent Word_2_1
      sound [set every repeat] = $Word21
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.38
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    SoundComponent Word_2_2
      sound [set every repeat] = $Word22
      startVal [time (s)] = 1.38
      stopVal [duration (s)] = 0.38
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    SoundComponent Word_2_3
      sound [set every repeat] = $Word23
      startVal [time (s)] = 1.76
      stopVal [duration (s)] = 0.38
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  Routine AFCFirst
    TextComponent Word1No
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.07
      text [set every repeat] = 1
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    SoundComponent Word_1_1
      sound [set every repeat] = $Word11
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.38
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    SoundComponent Word_1_2
      sound [set every repeat] = $Word12
      startVal [time (s)] = 1.38
      stopVal [duration (s)] = 0.38
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    SoundComponent Word_1_3
      sound [set every repeat] = $Word13
      startVal [time (s)] = 1.76
      stopVal [duration (s)] = 0.38
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  Routine SLWelcome
    TextComponent WelcomeMssg
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Task B (35 minutes)

        Researchers from ZZZ University have recently collected some recordings of an alien speech from another planet. The speech consists of syllables that sound similar to English. The researchers need your help to study this speech.

        You will first listen to a 6-minute recording of this speech and then complete three different tasks. In total, the study will take approximately 35 minutes to complete. You will be able to take short breaks in between tasks.
    KeyboardComponent ContinueButton
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ContinueTxt
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    CodeComponent BreakLoop2
      Code Type = Auto->JS
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      End Routine:
        Randomization.finished = True
  Routine TDTrainingIntro
    TextComponent TrainingBeginTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        We will begin with a training session using a fake speech created by the researchers.

        During the training, you will see the number of target syllables you recorded and your average response speed.





        Press SPACE to begin training
    KeyboardComponent TrainingContinueKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        run = 1
      Begin Routine:
        if run == 1:
            intromssg = "In this experiment, you will help university researchers who are studying alien languages. \nThere are two parts in this experiment and you will work with a different alien language in each part. \n\n\n\n\n\n\nPress SPACE to begin Part 1"
        else:
            intromssg = "Thanks for your help! This is the end of Part 1. You may take a short break now if you wish. \n\nIn Part 2, you will help researchers studying a different alien speech. \n\n\n\n\n\n\nPress SPACE to begin Part 2"
      End Routine:
        run += 1
    TextComponent IntroTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $intromssg
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    KeyboardComponent IntroContKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MSTWelcome2
    TextComponent MSTWelcome2Txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = It is important to note that some of the words are similar but not identical. Pay close attention to each word and only label it as "OLD" if it is EXACTLY THE SAME as a previous word.
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    TextComponent MSTWelcomeCont
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent MSTWelcomeContKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine HearingCheckIntro
    TextComponent HearingCheckTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Thank you for helping the researchers!

        Lastly, we will play you a few short speech sounds. In each trial, please select the syllable that matches with the sound you hear.





        Press SPACE to continue
    KeyboardComponent EndKey2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine HearingCheck
    SoundComponent CheckWord
      sound [set every repeat] = $SoundFile
      startVal [time (s)] = 0.5
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    TextComponent WordOptions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"1. "+Word1 + "         2. " + Word2 + "         3. " + Word3
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    TextComponent CheckQuestion
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Which sound did you hear?
        (Press the corresponding number on your keyboard)
    KeyboardComponent CheckRespKey
      allowedKeys = '1', '2', '3',
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Pause1sec
    TextComponent PauseTxt2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine End
    TextComponent EndTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thank you for your participation.







        Press SPACE to exit
    KeyboardComponent ExitKey2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_separate
    CodeComponent TargetandRespTime
      Code Type = Both
      Begin Experiment:
        respOnsetP = 0
        respcountP = 0
        previousOnsetP = 0
        TargetOnsetP = 0 # Target sound onset
        OccurenceC = 1
        hit = 0
        mytimerP = core.Clock()
      Begin JS Experiment:
        respOnsetP = 0;
        respcountP = 0;
        previousOnsetP = 0;
        TargetOnsetP = 0;
        OccurenceC = 1;
        hit = 0;
        mytimerP = new util.Clock();
      Begin JS Routine:
        if ((TDSound === Target)) {
            TargetOnsetP = mytimerP.getTime();
        }
        soundOnsetP = mytimerP.getTime();
      Begin Routine:
        if TDSound == Target:
            TargetOnsetP = mytimerP.getTime()
        soundOnsetP = mytimerP.getTime()
      End JS Routine:
        TD.addData("TargetOnsetP", TargetOnsetP);
        if (typeof PlayResp.keys !== 'undefined') {  // we had a response
            respcountP += 1;
            respOnsetP = (PlayResp.rt[0] + soundOnsetP);
            if (((respOnsetP - previousOnsetP) > 1.2)) {
                reactiontimeP = (respOnsetP - TargetOnsetP);
                if ((reactiontimeP < 1.2)) {
                    TD.addData("ReactionTimeP", reactiontimeP);
                    TD.addData("TargetSyllable", Target);
                    TD.addData("TargetPosition", Position);
                    TD.addData("TargetOccurence", OccurenceC);
                    hit += 1;
                    previousOnsetP = respOnsetP;
                }
            }
        }
      End Routine:
        # Set Target Onset time
        TD.addData('TargetOnsetP', TargetOnsetP)
        # Check if keyboard has been pressed
        if PlayResp.keys in ['', [], None]:
            PlayResp.keys = None
        if PlayResp.keys != None: # we had a response
            respcountP += 1
            #respOnset = TrainResp.rt[0] + TDTrainSound.tStartRefresh
            respOnsetP = PlayResp.rt[0] + soundOnsetP
            # Check if the response is too close to the previous valid response
            if respOnsetP - previousOnsetP > 1.2:
                # Calculate RT
                reactiontimeP = respOnsetP - TargetOnsetP
                # Check if RT is below the cutoff
                if reactiontimeP < 1.2:
                    TD.addData('ReactionTimeP', reactiontimeP)
                    TD.addData('TargetSyllable', Target)
                    TD.addData('TargetPosition', Position)
                    TD.addData('TargetOccurence', OccurenceC)
                    # Count it as a valid "hit"
                    hit += 1
                    # Use this as the latest valid response
                    previousOnsetP = respOnsetP
    SoundComponent PlaySound
      sound [set every repeat] = $TDSoundFile
      startVal [time (s)] = 0
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    TextComponent PlayText
      letterHeight = 0.03
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.38
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      text:
        Press SPACE as quickly as possible when you hear the target syllable
    KeyboardComponent PlayResp
      allowedKeys = 'space', 
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.38
      store = all keys
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    TextComponent TargetSoundTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.38
      text [set every repeat] = $Target
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  Routine FamRating
    TextComponent FamRatePrompt
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        How familiar does this word sound?
        (Press the corresponding number on your keyboard)
    TextComponent RatingScale
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = 1 ----------------- 2 ----------------- 3 ----------------- 4
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    TextComponent RatingScale2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        (Not familiar)                                                                     (Very familiar)
    KeyboardComponent FamRatingResp
      allowedKeys = '1', '2', '3', '4', 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent Syllab1
      sound [set every repeat] = $Word11
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.38
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    SoundComponent Syllab2
      sound [set every repeat] = $Word12
      startVal [time (s)] = 0.88
      stopVal [duration (s)] = 0.38
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    SoundComponent Syllab3
      sound [set every repeat] = $Word13
      startVal [time (s)] = 1.26
      stopVal [duration (s)] = 0.38
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  Routine FamRatingIntro
    TextComponent FamRateIntroTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this part, you will listen to short speech sounds. Some of these may sound familiar to you, as they were spoken in the first part of the study. Others may sound unfamiliar, as they were not spoken in the first part of the study.

        Your job is to listen carefully to these short sounds and rate how familiar they sound to you on a scale of 1 (Not familiar) to 4 (Very familiar).

        There will be 12 trials in total.
    TextComponent FamIntroCont
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to begin
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    KeyboardComponent FamRateIntroKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AttentionCheck3
    KeyboardComponent AttnCheck3ContKey
      allowedKeys = 'return',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent AttnCheck3Txt
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        What is your favorite drink?

        (Please type your answer in the box below)
    TextboxComponent AttnCheck3Resp
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      padding = None
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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    TextComponent AttnCheck3Cont
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press ENTER to submit
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    CodeComponent OccurenceCounter1
      Code Type = Auto->JS
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      End Routine:
        OccurenceC += 1
  Routine P2Welcome
    TextComponent P2WelcomeTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = It seems like the alien speech contains regularly repeating 'words'. In the next part of this study, you will be asked to distinguish these alien words from other sounds.
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    TextComponent P2WelcomeCont
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent P2WelcomeContKey
      allowedKeys = 'space', 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TakeBreak
    TextComponent P2IntroTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Thank you for your help! You may take a short break now if you wish.
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    TextComponent ContinueTxt5
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent ContinueKey5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrainStart
    TextComponent Three
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent Two
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine Exposure
    CodeComponent SoundCounter
      Code Type = Auto->JS
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      Begin Experiment:
        scounter = 0
        takebreak = 0
        pausecheck = 0
      Begin Routine:
        scounter += 1

        if scounter == 57 or scounter == 123 or scounter == 147 or scounter == 177 or scounter == 267 or scounter == 300:
            pausecheck = 1
        else:
            pausecheck = 0

        if scounter == 360: #Restart counting every two minutes
            takebreak = 1
            scounter = 0
            volumecounter0 = 0
        else:
            takebreak = 0
    CodeComponent ExposureVolume
      Code Type = Auto->JS
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      Begin Experiment:
        volume0 = 1
        volumecounter0 = 0
      Begin Routine:
        volumecounter0 += 1
        if volumecounter0 == 1 or volumecounter0 == 360:
            volume0 = 0.03
        elif volumecounter0 == 2 or volumecounter0 == 359:
            volume0 = 0.06
        elif volumecounter0 == 3 or volumecounter0 == 358:
            volume0 = 0.09
        elif volumecounter0 == 4 or volumecounter0 == 357:
            volume0 = 0.2
        elif volumecounter0 == 5 or volumecounter0 == 356:
            volume0 = 0.3
        elif volumecounter0 == 6 or volumecounter0 == 355:
            volume0 = 0.5
        else:
            volume0 = 1
    SoundComponent ExposurePlay
      sound [set every repeat] = $SyllableFile
      startVal [time (s)] = 0.0
      volume [set every repeat] = volume0
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    TextComponent ExposureCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.38
      text = +
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    TextComponent ExposureInstruction
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.38
      text = Press SPACE as soon as you can when the speech stops
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  Routine ExposurePrep
    CodeComponent code_4
      Code Type = Both
      Begin Experiment:
        # Choose the scrambling condition file
        import random
        c = random.randint(1, 3)
        #c = 1
        cond = str(c) # Used as the file for the PlayTD loop
      Begin JS Experiment:
        c = Math.floor((Math.random() * 3)+1);
        cond = c.toString();
      Begin JS Routine:
        Randomization.addData('Condition', 2)
      Begin Routine:
        Randomization.addData('Condition', 2)
    TextComponent ExposureIntro
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        First, we will play a recording of this alien speech for 6 minutes with a short break every 2 minutes.

        The recording is a little broken and the speech will stop playing from time to time. Please help the researchers mark the broken parts by pressing SPACE whenever the speech stops.
    KeyboardComponent ExposureIntroKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ExposureIntroCont
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE when you are ready to begin
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  Routine Pause
    KeyboardComponent PauseCheckKey
      allowedKeys = 'space', 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent PauseCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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    TextComponent PauseInstruction
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Press SPACE as soon as you can when the speech stops
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  Routine TakeABreak
    KeyboardComponent BreakRespSubmit
      allowedKeys = 'return' 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent BreakTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Let's take a break.


        How many different syllables do you think were in the speech? Click the box below to type your response.
        (Press ENTER to submit your answer)
    TextboxComponent BreakResponse
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      padding = None
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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  Routine BreakOver
    TextComponent EndBreakInstruction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Let's take a break.

        You can press SPACE whenever you are ready to return to the task.
        The task will resume automatically after 30 seconds.
    KeyboardComponent EndBreakKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine AddRespCountCode
    CodeComponent AddRespCount
      Code Type = Auto->JS
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      End Routine:
        falsealarm = 0
        hitrate = 0
        if hit != 0:
            falsealarm = 1-(hit/respcountP)
            hitrate = hit/4

        TD.addData("RespCountP", respcountP)
        TD.addData("FalseAlarmRate", falsealarm)
        TD.addData("HitRate", hitrate)
        hit = 0
        respcountP = 0
  Routine Rest_code
    CodeComponent code_14
      Code Type = Auto->JS
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      End Routine:
        repeatagainOn = 1
        if headphonecorrect > 4:
            Headphone_retest.finished = True
            repeatagainOn = 0
        else:
            repeatagainOn = 1
            headphonecorrect = 0
  Routine RepeatAgain
    TextComponent RepeatAgainMssg
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You made too many incorrect responses. Please make sure your headphones are working and try the headphone check one more time.



        Press SPACE
    KeyboardComponent RepeatAgainKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome0
  Routine SoundCheckIntro
  Routine SoundCheck
  Routine HeadphoneCheck
  LoopInitiator Headphone_retest loopType="TrialHandler"
    loopType = random
    nReps = 100
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    LoopInitiator HeadphoneLoop loopType="TrialHandler"
      conditionsFile = Headphone_check.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('File', 'Headphone/t1_1.wav'), ('Correct', 1)]),
        OrderedDict([('File', 'Headphone/t1_2.wav'), ('Correct', 1)]),
        OrderedDict([('File', 'Headphone/t2_1.wav'), ('Correct', 2)]),
        OrderedDict([('File', 'Headphone/t2_2.wav'), ('Correct', 2)]),
        OrderedDict([('File', 'Headphone/t3_1.wav'), ('Correct', 3)]),
        OrderedDict([('File', 'Headphone/t3_2.wav'), ('Correct', 3)])]
      Routine HeadphonePlay
      Routine HeadphoneFeedback
    LoopTerminator HeadphoneLoop
    Routine Rest_code
    LoopInitiator RepeatAgainLoop loopType="TrialHandler"
      loopType = random
      nReps = repeatagainOn
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      Routine RepeatAgain
    LoopTerminator RepeatAgainLoop
  LoopTerminator Headphone_retest
  LoopInitiator Randomization loopType="TrialHandler"
    conditionsFile = Counterbalance.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('WordOrder', 1), ('SLOrder', 0)]),
      OrderedDict([('WordOrder', 0), ('SLOrder', 1)])]
    LoopInitiator MSTLoop loopType="TrialHandler"
      loopType = sequential
      nReps = WordOrder
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      Routine MSTWelcome
      Routine MSTWelcome2
      Routine MSTTrainIntro
      LoopInitiator MSTTrainLoop loopType="TrialHandler"
        conditionsFile = trainSound.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('SoundFile', 'Training/FO_YI_LAY.wav'), ('Type', 'NEW'), ('Correct', 2)]),
          OrderedDict([('SoundFile', 'Training/FO_YI_LAY.wav'), ('Type', 'OLD'), ('Correct', 1)]),
          OrderedDict([('SoundFile', 'Training/YO_BU_JAY.wav'), ('Type', 'NEW'), ('Correct', 2)]),
          OrderedDict([('SoundFile', 'Training/JAY_YO_BU.wav'), ('Type', 'SIMILAR'), ('Correct', 2)]),
          OrderedDict([('SoundFile', 'Training/FO_YI_LAY.wav'), ('Type', 'OLD'), ('Correct', 1)])]
        Routine Pause1sec
        Routine MSTTrain
        Routine MSTTrainFeedback
      LoopTerminator MSTTrainLoop
      Routine MSTTestStartInstrct
      LoopInitiator MSTPlayLoop loopType="TrialHandler"
        Selected rows = $condition
        conditionsFile = testSound.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('File', 'TestWords/HA_SI_JAI.wav'), ('WordCorrect', 2), ('Correct_type', 'NEW'), ('WordType', 'NEW'), ('Condition', 'A')]),
          OrderedDict([('File', 'TestWords/KO_SU_FAI.wav'), ('WordCorrect', 2), ('Correct_type', 'NEW'), ('WordType', 'NEW'), ('Condition', 'A')]),
          OrderedDict([('File', 'TestWords/TAI_GI_SA.wav'), ('WordCorrect', 2), ('Correct_type', 'NEW'), ('WordType', 'NEW'), ('Condition', 'A')]),
          OrderedDict([('File', 'TestWords/KAI_LAY_TA.wav'), ('WordCorrect', 2), ('Correct_type', 'NEW'), ('WordType', 'NEW'), ('Condition', 'A')]),
          OrderedDict([('File', 'TestWords/RAY_PA_TI.wav'), ('WordCorrect', 2), ('Correct_type', 'NEW'), ('WordType', 'NEW'), ('Condition', 'A')]),
          OrderedDict([('File', 'TestWords/KO_SU_FAI.wav'), ('WordCorrect', 1), ('Correct_type', 'OLD'), ('WordType', 'OLD'), ('Condition', 'A')]),
          OrderedDict([('File', 'TestWords/TAI_SA_GI.wav'), ('WordCorrect', 2), ('Correct_type', 'NEW'), ('WordType', 'SIMILAR'), ('Condition', 'A')]),
          OrderedDict([('File', 'TestWords/KAI_LAY_TA.wav'), ('WordCorrect', 1), ('Correct_type', 'OLD'), ('WordType', 'OLD'), ('Condition', 'A')]),
          OrderedDict([('File', 'TestWords/NA_WAI_VU.wav'), ('WordCorrect', 2), ('Correct_type', 'NEW'), ('WordType', 'NEW'), ('Condition', 'A')]),
          OrderedDict([('File', 'TestWords/KO_SU_FAI.wav'), ('WordCorrect', 1), ('Correct_type', 'OLD'), ('WordType', 'OLD'), ('Condition', 'A')])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
        Routine MSTTrialCount
        Routine MSTplay
      LoopTerminator MSTPlayLoop
    LoopTerminator MSTLoop
    LoopInitiator SLLoop loopType="TrialHandler"
      loopType = random
      nReps = SLOrder
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      Routine SLWelcome
      Routine ExposurePrep
      LoopInitiator ExposureLoop loopType="TrialHandler"
        Selected rows = 0:1080
        conditionsFile = $cond + "_new_list.xlsx"
        loopType = sequential
        nReps = 1
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        Routine Exposure
        LoopInitiator PauseOnOff loopType="TrialHandler"
          loopType = random
          nReps = pausecheck
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          Routine Pause
        LoopTerminator PauseOnOff
        LoopInitiator BreakOnOff loopType="TrialHandler"
          loopType = random
          nReps = takebreak
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          Routine TakeABreak
          Routine BreakOver
        LoopTerminator BreakOnOff
      LoopTerminator ExposureLoop
      Routine Part1Intro
      Routine TDTrainingIntro
      LoopInitiator TrainTDLoop loopType="TrialHandler"
        Selected rows = 216:218
        conditionsFile = TargetSyllables.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('Target', 'ta'), ('TargetFile', 'SL_Sounds/ta.wav'), ('Condition', 1), ('Position', 1)]),
          OrderedDict([('Target', 'ti'), ('TargetFile', 'SL_Sounds/ti.wav'), ('Condition', 1), ('Position', 2)]),
          OrderedDict([('Target', 'me'), ('TargetFile', 'SL_Sounds/me.wav'), ('Condition', 1), ('Position', 3)]),
          OrderedDict([('Target', 'pu'), ('TargetFile', 'SL_Sounds/pu.wav'), ('Condition', 1), ('Position', 2)]),
          OrderedDict([('Target', 'su'), ('TargetFile', 'SL_Sounds/su.wav'), ('Condition', 1), ('Position', 3)]),
          OrderedDict([('Target', 'ru'), ('TargetFile', 'SL_Sounds/ru.wav'), ('Condition', 1), ('Position', 1)]),
          OrderedDict([('Target', 'ko'), ('TargetFile', 'SL_Sounds/ko.wav'), ('Condition', 1), ('Position', 3)]),
          OrderedDict([('Target', 're'), ('TargetFile', 'SL_Sounds/re.wav'), ('Condition', 1), ('Position', 1)]),
          OrderedDict([('Target', 'fu'), ('TargetFile', 'SL_Sounds/fu.wav'), ('Condition', 1), ('Position', 2)]),
          OrderedDict([('Target', 'ni'), ('TargetFile', 'SL_Sounds/ni.wav'), ('Condition', 1), ('Position', 3)]),
          OrderedDict([('Target', 'ge'), ('TargetFile', 'SL_Sounds/ge.wav'), ('Condition', 1), ('Position', 2)]),
          OrderedDict([('Target', 'fe'), ('TargetFile', 'SL_Sounds/fe.wav'), ('Condition', 1), ('Position', 1)]),
          OrderedDict([('Target', 'pu'), ('TargetFile', 'SL_Sounds/pu.wav'), ('Condition', 1), ('Position', 2)]),
          OrderedDict([('Target', 'ta'), ('TargetFile', 'SL_Sounds/ta.wav'), ('Condition', 1), ('Position', 1)])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
        Routine TrainingSample
        Routine TrainingPlaySample
        Routine TrainStart
        LoopInitiator TrainTD loopType="TrialHandler"
          Selected rows = 0:45
          conditionsFile = TDTrainList.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [OrderedDict([('Sound', 'PA'), ('File', 'SL_Sounds/PA.wav')]),
            OrderedDict([('Sound', 'DO'), ('File', 'SL_Sounds/DO.wav')]),
            OrderedDict([('Sound', 'TI'), ('File', 'SL_Sounds/TI.wav')]),
            OrderedDict([('Sound', 'WI'), ('File', 'SL_Sounds/WI.wav')]),
            OrderedDict([('Sound', 'DA'), ('File', 'SL_Sounds/DA.wav')]),
            OrderedDict([('Sound', 'KU'), ('File', 'SL_Sounds/KU.wav')]),
            OrderedDict([('Sound', 'TU'), ('File', 'SL_Sounds/TU.wav')]),
            OrderedDict([('Sound', 'PI'), ('File', 'SL_Sounds/PI.wav')]),
            OrderedDict([('Sound', 'LO'), ('File', 'SL_Sounds/LO.wav')]),
            OrderedDict([('Sound', 'PA'), ('File', 'SL_Sounds/PA.wav')]),
            OrderedDict([('Sound', 'DO'), ('File', 'SL_Sounds/DO.wav')]),
            OrderedDict([('Sound', 'TI'), ('File', 'SL_Sounds/TI.wav')]),
            OrderedDict([('Sound', 'TU'), ('File', 'SL_Sounds/TU.wav')]),
            OrderedDict([('Sound', 'PI'), ('File', 'SL_Sounds/PI.wav')]),
            OrderedDict([('Sound', 'LO'), ('File', 'SL_Sounds/LO.wav')]),
            OrderedDict([('Sound', 'WI'), ('File', 'SL_Sounds/WI.wav')]),
            OrderedDict([('Sound', 'DA'), ('File', 'SL_Sounds/DA.wav')]),
            OrderedDict([('Sound', 'KU'), ('File', 'SL_Sounds/KU.wav')]),
            OrderedDict([('Sound', 'TU'), ('File', 'SL_Sounds/TU.wav')]),
            OrderedDict([('Sound', 'PI'), ('File', 'SL_Sounds/PI.wav')]),
            OrderedDict([('Sound', 'LO'), ('File', 'SL_Sounds/LO.wav')]),
            OrderedDict([('Sound', 'PA'), ('File', 'SL_Sounds/PA.wav')]),
            OrderedDict([('Sound', 'DO'), ('File', 'SL_Sounds/DO.wav')]),
            OrderedDict([('Sound', 'TI'), ('File', 'SL_Sounds/TI.wav')])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
          Routine train
        LoopTerminator TrainTD
        Routine Pause1sec
        Routine TDTrainFeedback
      LoopTerminator TrainTDLoop
      Routine P1IntroII
      LoopInitiator TD loopType="TrialHandler"
        loopType = random
        nReps = 1
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        LoopInitiator FirstTDLoop loopType="TrialHandler"
          Selected rows = $first
          conditionsFile = TargetSyllables.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [OrderedDict([('Target', 'FO'), ('TargetFile', 'SL_Sounds/FO.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'MU'), ('TargetFile', 'SL_Sounds/MU.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'BA'), ('TargetFile', 'SL_Sounds/BA.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'ZO'), ('TargetFile', 'SL_Sounds/ZO.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'JAI'), ('TargetFile', 'SL_Sounds/JAI.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'TAY'), ('TargetFile', 'SL_Sounds/TAY.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'RAI'), ('TargetFile', 'SL_Sounds/RAI.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'SI'), ('TargetFile', 'SL_Sounds/SI.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'WU'), ('TargetFile', 'SL_Sounds/WU.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'GA'), ('TargetFile', 'SL_Sounds/GA.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'NAY'), ('TargetFile', 'SL_Sounds/NAY.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'KI'), ('TargetFile', 'SL_Sounds/KI.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'ZO'), ('TargetFile', 'SL_Sounds/ZO.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'FO'), ('TargetFile', 'SL_Sounds/FO.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'BA'), ('TargetFile', 'SL_Sounds/BA.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'KI'), ('TargetFile', 'SL_Sounds/KI.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'RAI'), ('TargetFile', 'SL_Sounds/RAI.wav'), ('Condition', 1)])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
          Routine SampleIntro
          Routine PlaySample
          Routine TDStart
          LoopInitiator FirstTD loopType="TrialHandler"
            Selected rows = $rows
            conditionsFile = $cond + "_TD_list.xlsx"
            loopType = sequential
            nReps = 1
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            Routine trial_separate
          LoopTerminator FirstTD
          Routine Pause1sec
          Routine AddRespCountCode
        LoopTerminator FirstTDLoop
        Routine AttentionCheck3
        LoopInitiator SecondTDLoop loopType="TrialHandler"
          Selected rows = $second
          conditionsFile = TargetSyllables.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
            [OrderedDict([('Target', 'FO'), ('TargetFile', 'SL_Sounds/FO.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'MU'), ('TargetFile', 'SL_Sounds/MU.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'BA'), ('TargetFile', 'SL_Sounds/BA.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'ZO'), ('TargetFile', 'SL_Sounds/ZO.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'JAI'), ('TargetFile', 'SL_Sounds/JAI.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'TAY'), ('TargetFile', 'SL_Sounds/TAY.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'RAI'), ('TargetFile', 'SL_Sounds/RAI.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'SI'), ('TargetFile', 'SL_Sounds/SI.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'WU'), ('TargetFile', 'SL_Sounds/WU.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'GA'), ('TargetFile', 'SL_Sounds/GA.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'NAY'), ('TargetFile', 'SL_Sounds/NAY.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'KI'), ('TargetFile', 'SL_Sounds/KI.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'ZO'), ('TargetFile', 'SL_Sounds/ZO.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'FO'), ('TargetFile', 'SL_Sounds/FO.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'BA'), ('TargetFile', 'SL_Sounds/BA.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'KI'), ('TargetFile', 'SL_Sounds/KI.wav'), ('Condition', 1)]),
            OrderedDict([('Target', 'RAI'), ('TargetFile', 'SL_Sounds/RAI.wav'), ('Condition', 1)])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
          Routine SampleIntro
          Routine PlaySample
          Routine TDStart
          LoopInitiator SecondTD loopType="TrialHandler"
            Selected rows = $rows
            conditionsFile = $cond+ "_TD_list.xlsx"
            loopType = sequential
            nReps = 1
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            Routine trial_separate
          LoopTerminator SecondTD
          Routine Pause1sec
          Routine AddRespCountCode
        LoopTerminator SecondTDLoop
        Routine AttentionCheck1
        LoopInitiator thirdTDLoop loopType="TrialHandler"
          Selected rows = $third
          conditionsFile = TargetSyllables.xlsx
          loopType = sequential
          nReps = 1
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          conditions:
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          Routine SampleIntro
          Routine PlaySample
          Routine TDStart
          LoopInitiator ThirdTD loopType="TrialHandler"
            Selected rows = $rows
            conditionsFile = $cond + "_TD_list.xlsx"
            loopType = sequential
            nReps = 1
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            Routine trial_separate
          LoopTerminator ThirdTD
          Routine Pause1sec
          Routine AddRespCountCode
        LoopTerminator thirdTDLoop
      LoopTerminator TD
      Routine TakeBreak
      Routine P2Welcome
      Routine FamRatingIntro
      LoopInitiator FamRatingLoop loopType="TrialHandler"
        Selected rows = 0:12
        conditionsFile = $cond + "_explicit.xlsx"
        loopType = random
        nReps = 1
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        Routine Pause1sec
        Routine FamRating
      LoopTerminator FamRatingLoop
      Routine AttentionCheck2
      Routine Part2Intro2
      LoopInitiator AFCTest loopType="TrialHandler"
        Selected rows = 12:28
        conditionsFile = $cond + "_explicit.xlsx"
        loopType = random
        nReps = 1
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        Routine count
        Routine AFCStart
        Routine AFCFirst
        Routine AFCSecond
        Routine AFCQuestion
      LoopTerminator AFCTest
      Routine HearingCheckIntro
      LoopInitiator HearingcheckLoop loopType="TrialHandler"
        conditionsFile = HearingCheckSounds.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('Target', 'TI'), ('SoundFile', 'SL_Sounds/TI.wav'), ('Word1', 'TEE'), ('Word2', 'DEE'), ('Word3', 'SEE'), ('Correct', 1)]),
          OrderedDict([('Target', 'SU'), ('SoundFile', 'SL_Sounds/SU.wav'), ('Word1', 'SO'), ('Word2', 'SU'), ('Word3', 'ZU'), ('Correct', 2)]),
          OrderedDict([('Target', 'KAY'), ('SoundFile', 'MSTTestWords/KAY.wav'), ('Word1', 'KEE'), ('Word2', 'KAY'), ('Word3', 'HAY'), ('Correct', 2)]),
          OrderedDict([('Target', 'FU'), ('SoundFile', 'MSTTestWords/FU.wav'), ('Word1', 'VU'), ('Word2', 'FO'), ('Word3', 'FU'), ('Correct', 3)]),
          OrderedDict([('Target', 'BA'), ('SoundFile', 'MSTTestWords/BA.wav'), ('Word1', 'PA'), ('Word2', 'BEE'), ('Word3', 'BA'), ('Correct', 3)])]
        Routine Pause1sec
        Routine HearingCheck
      LoopTerminator HearingcheckLoop
    LoopTerminator SLLoop
  LoopTerminator Randomization
  Routine P2End
